<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>
    <stream>
        <gadget>
            <name>RemoveROOversampling</name>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <name>AccTrig</name>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property>
                <name>trigger_dimension</name>
                <value>repetition</value>
            </property>
            <property>
                <name>sorting_dimension</name>
                <value>slice</value>
            </property>
        </gadget>

        <gadget>
            <name>Buff</name>
            <dll>gadgetron_mricore</dll>
            <classname>BucketToBufferGadget</classname>
            <property>
                <name>N_dimension</name>
                <value></value>
            </property>
            <property>
                <name>S_dimension</name>
                <value></value>
            </property>
            <property>
                <name>split_slices</name>
                <value>true</value>
            </property>
        </gadget>

        <gadget>
            <name>SimpleRecon</name>
            <dll>gadgetron_mricore</dll>
            <classname>SimpleReconGadget</classname>
        </gadget>

        <gadget>
            <name>ImageArraySplit</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageArraySplitGadget</classname>
        </gadget>


        <puredistributed>
            <readers>
                <reader>
                    <classname>MRIImageReader</classname>
                    <dll>gadgetron_mricore</dll>
                </reader>
            </readers>
            <writers>
                <writer>
                    <classname>MRIImageWriter</classname>
                    <dll>gadgetron_mricore</dll>
                </writer>
            </writers>

            <purestream>
                <gadget>
                    <name>Convert</name>
                    <dll>gadgetron_mricore</dll>
                    <classname>ComplexToFloatGadget</classname>
                </gadget>
            </purestream>
        </puredistributed>


        <gadget>
            <name>ImageSort</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageSortGadget</classname>
            <property>
                <name>sorting_dimension</name>
                <value>repetition</value>
            </property>
        </gadget>
    </stream>

</configuration>
