<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <!--
        Gadgetron kspace binning recon for 2DT cardiac MRI
        Cloud version

        Triggered by slice
        Recon N is phase and S is set

        Author: Hui Xue
        National Heart, Lung and Blood Institute, National Institutes of Health
        10 Center Drive, Bethesda, MD 20814, USA
        Email: hui.xue@nih.gov
    -->

    <stream>
        <!-- Noise prewhitening -->
        <gadget>
            <name>NoiseAdjust</name>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <!-- RO asymmetric echo handling -->
        <gadget>
            <name>AsymmetricEcho</name>
            <dll>gadgetron_mricore</dll>
            <classname>AsymmetricEchoAdjustROGadget</classname>
        </gadget>

        <!-- RO oversampling removal -->
        <gadget>
            <name>RemoveROOversampling</name>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>


        <!-- Data accumulation and trigger gadget -->
        <gadget>
            <name>AccTrig</name>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property name="trigger_dimension" value="slice"/>
            <property name="sorting_dimension" value=""/>
        </gadget>

        <gadget>
            <name>BucketToBuffer</name>
            <dll>gadgetron_mricore</dll>
            <classname>BucketToBufferGadget</classname>
            <property name="N_dimension" value="phase"/>
            <property name="S_dimension" value="set"/>
            <property name="split_slices" value="true"/>
            <property name="ignore_segment" value="true"/>
        </gadget>

        <!-- Prep ref -->
        <gadget>
            <name>PrepRef</name>
            <dll>gadgetron_mricore</dll>
            <classname>GenericReconCartesianReferencePrepGadget</classname>

            <!-- parameters for debug and timing -->
            <property name="debug_folder" value=""/>
            <property name="perform_timing" value="true"/>
            <property name="verbose" value="true"/>

            <!-- averaging across repetition -->
            <property name="average_all_ref_N" value="true"/>
            <!-- every set has its own kernels -->
            <property name="average_all_ref_S" value="true"/>
            <!-- whether always to prepare ref if no acceleration is used -->
            <property name="prepare_ref_always" value="true"/>
        </gadget>

        <!-- Coil compression -->
        <gadget>
            <name>CoilCompression</name>
            <dll>gadgetron_mricore</dll>
            <classname>GenericReconEigenChannelGadget</classname>

            <!-- parameters for debug and timing -->
            <property name="debug_folder" value=""/>
            <property name="perform_timing" value="false"/>
            <property name="verbose" value="false"/>

            <property name="average_all_ref_N" value="true"/>
            <property name="average_all_ref_S" value="true"/>

            <!-- Up stream coil compression -->
            <property name="upstream_coil_compression" value="true"/>
            <property name="upstream_coil_compression_thres" value="-1"/>
            <property name="upstream_coil_compression_num_modesKept" value="0"/>
        </gadget>

        <puredistributed>
            <readers>
                <reader>
                    <classname>BufferReader</classname>
                    <dll>gadgetron_core_readers</dll>
                </reader>
                <reader>
                    <classname>IsmrmrdImageArrayReader</classname>
                    <dll>gadgetron_core_readers</dll>
                </reader>
            </readers>
            <writers>
                <writer>
                    <classname>BufferWriter</classname>
                    <dll>gadgetron_core_writers</dll>
                </writer>
                <writer>
                    <classname>IsmrmrdImageArrayWriter</classname>
                    <dll>gadgetron_core_writers</dll>
                </writer>
            </writers>

            <purestream>
                <!-- Recon -->
                <gadget>
                    <name>Recon</name>
                    <dll>gadgetron_cmr</dll>
                    <classname>CmrCartesianKSpaceBinningCineGadget</classname>

                    <property name="number_of_output_phases" value="30"/>
                    <property name="send_out_raw" value="false"/>
                    <property name="send_out_multiple_series_by_slice" value="false"/>

                    <property name="use_multiple_channel_recon" value="true"/>
                    <property name="use_nonlinear_binning_recon" value="true"/>

                    <property name="time_tick" value="2.5"/>
                    <property name="arrhythmia_rejector_factor" value="0.25"/>

                    <!-- parameters for raw recon -->
                    <property name="grappa_kSize_RO" value="5"/>
                    <property name="grappa_kSize_E1" value="4"/>
                    <property name="grappa_reg_lamda" value="0.0005"/>
                    <property name="downstream_coil_compression_num_modesKept" value="0"/>
                    <property name="downstream_coil_compression_thres" value="0.025"/>

                    <!-- parameters for binning recon -->
                    <property name="kspace_binning_interpolate_heart_beat_images" value="true"/>
                    <property name="kspace_binning_navigator_acceptance_window" value="0.65"/>
                    <property name="kspace_binning_max_temporal_window" value="2.0"/>
                    <property name="kspace_binning_minimal_cardiac_phase_width" value="25.0"/>

                    <property name="kspace_binning_moco_reg_strength" value="12.0"/>
                    <property name="kspace_binning_moco_iters" value="32 64 100 100 100"/>

                    <property name="kspace_binning_kSize_RO" value="7"/>
                    <property name="kspace_binning_kSize_E1" value="7"/>
                    <property name="kspace_binning_reg_lamda" value="0.005"/>
                    <property name="kspace_binning_linear_iter_max" value="90"/>
                    <property name="kspace_binning_linear_iter_thres" value="0.0015"/>

                    <property name="kspace_binning_nonlinear_iter_max" value="25"/>
                    <property name="kspace_binning_nonlinear_iter_thres" value="0.004"/>
                    <property name="kspace_binning_nonlinear_data_fidelity_lamda" value="1.0"/>
                    <property name="kspace_binning_nonlinear_image_reg_lamda" value="0.00015"/>
                    <property name="kspace_binning_nonlinear_reg_N_weighting_ratio" value="10.0"/>
                    <property name="kspace_binning_nonlinear_reg_use_coil_sen_map" value="false"/>
                    <property name="kspace_binning_nonlinear_reg_with_approx_coeff" value="true"/>
                    <property name="kspace_binning_nonlinear_reg_wav_name" value="db2"/>

                    <!-- parameters for debug and timing -->
                    <property name="debug_folder" value=""/>
                    <property name="perform_timing" value="true"/>
                    <property name="verbose" value="true"/>
                </gadget>

                <!-- Partial fourier handling -->
                <gadget>
                    <name>PartialFourierHandling</name>
                    <dll>gadgetron_mricore</dll>
                    <classname>GenericReconPartialFourierHandlingPOCSGadget</classname>

                    <!-- parameters for debug and timing -->
                    <property name="debug_folder" value=""/>
                    <property name="perform_timing" value="false"/>
                    <property name="verbose" value="true"/>

                    <!-- if incoming images have this meta field, it will not be processed -->
                    <property name="skip_processing_meta_field" value="Skip_processing_after_recon"/>

                    <!-- Parfial fourier POCS parameters -->
                    <property name="partial_fourier_POCS_iters" value="6"/>
                    <property name="partial_fourier_POCS_thres" value="0.01"/>
                    <property name="partial_fourier_POCS_transitBand" value="24"/>
                    <property name="partial_fourier_POCS_transitBand_E2" value="16"/>
                </gadget>
            </purestream>
        </puredistributed>
        <!-- Kspace filtering -->
        <gadget>
            <name>KSpaceFilter</name>
            <dll>gadgetron_mricore</dll>
            <classname>GenericReconKSpaceFilteringGadget</classname>

            <!-- parameters for debug and timing -->
            <property name="debug_folder" value=""/>
            <property name="perform_timing" value="false"/>
            <property name="verbose" value="false"/>

            <!-- if incoming images have this meta field, it will not be processed -->
            <property name="skip_processing_meta_field" value="Skip_processing_after_recon"/>

            <!-- parameters for kspace filtering -->
            <property name="filterRO" value="Gaussian"/>
            <property name="filterRO_sigma" value="1.0"/>
            <property name="filterRO_width" value="0.15"/>

            <property name="filterE1" value="Gaussian"/>
            <property name="filterE1_sigma" value="1.0"/>
            <property name="filterE1_width" value="0.15"/>

            <property name="filterE2" value="Gaussian"/>
            <property name="filterE2_sigma" value="1.0"/>
            <property name="filterE2_width" value="0.15"/>
        </gadget>

        <!-- FOV Adjustment -->
        <gadget>
            <name>FOVAdjustment</name>
            <dll>gadgetron_mricore</dll>
            <classname>GenericReconFieldOfViewAdjustmentGadget</classname>

            <!-- parameters for debug and timing -->
            <property name="debug_folder" value=""/>
            <property name="perform_timing" value="false"/>
            <property name="verbose" value="false"/>
        </gadget>

        <!-- Image Array Scaling -->
        <gadget>
            <name>Scaling</name>
            <dll>gadgetron_mricore</dll>
            <classname>GenericReconImageArrayScalingGadget</classname>

            <!-- parameters for debug and timing -->
            <property name="perform_timing" value="false"/>
            <property name="verbose" value="false"/>

            <property name="min_intensity_value" value="64"/>
            <property name="max_intensity_value" value="4095"/>
            <property name="scalingFactor" value="10.0"/>
            <property name="use_constant_scalingFactor" value="true"/>
            <property name="auto_scaling_only_once" value="true"/>
            <property name="scalingFactor_dedicated" value="100.0"/>
        </gadget>

        <!-- ImageArray to images -->
        <gadget>
            <name>ImageArraySplit</name>
            <dll>gadgetron_mricore</dll>
            <classname>ImageArraySplitGadget</classname>
        </gadget>

        <!-- after recon processing -->
        <gadget>
            <name>ComplexToFloatAttrib</name>
            <dll>gadgetron_mricore</dll>
            <classname>ComplexToFloatGadget</classname>
        </gadget>

        <gadget>
            <name>FloatToShortAttrib</name>
            <dll>gadgetron_mricore</dll>
            <classname>FloatToUShortGadget</classname>
            <property name="max_intensity" value="32767"/>
            <property name="min_intensity" value="0"/>
            <property name="intensity_offset" value="0"/>
        </gadget>
    </stream>

</configuration>
