<?xml version="1.0" encoding="utf-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <gadget>
        <name>LAXAI</name>
        <dll>gadgetron_cmr</dll>
        <classname>CmrRealTimeLAXCineAIAnalysisGadget</classname>

        <property><name>perform_AI</name><value>true</value></property>

        <!-- parameters for debug and timing -->
        <property><name>perform_timing</name><value>true</value></property>
        <property><name>verbose</name><value>true</value></property>
        <property><name>debug_folder</name><value></value></property>
    </gadget>

</gadgetronStreamConfiguration>