<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
    xmlns="http://gadgetron.sf.net/gadgetron"
    xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <gadget>
      <name>RemoveROOversampling</name>
        <dll>gadgetron_mricore</dll>
        <classname>RemoveROOversamplingGadget</classname>
    </gadget>

    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property>
            <name>trigger_dimension</name>
            <value>repetition</value>
        </property>
        <property>
          <name>sorting_dimension</name>
          <value>slice</value>
        </property>
    </gadget>

    <gadget>
        <name>Buff</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property>
            <name>N_dimension</name>
            <value></value>
        </property>
        <property>
          <name>S_dimension</name>
          <value></value>
        </property>
        <property>
          <name>split_slices</name>
          <value>true</value>
        </property>
    </gadget>

    <gadget>
        <name>FFT</name>
        <dll>gadgetron_mricore</dll>
        <classname>FFTGadget</classname>
    </gadget>

    <gadget>
        <name>Combine</name>
        <dll>gadgetron_mricore</dll>
        <classname>CombineGadget</classname>
    </gadget>

    <gadget>
        <name>Extract</name>
        <dll>gadgetron_mricore</dll>
        <classname>ExtractGadget</classname>
    </gadget>

    <gadget>
        <name>AutoScale</name>
        <dll>gadgetron_mricore</dll>
        <classname>AutoScaleGadget</classname>
    </gadget>

    <gadget>
        <name>DicomFinish</name>
        <dll>gadgetron_dicom</dll>
        <classname>DicomFinishGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
