<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <stream>
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property name="trigger_dimension" value="repetition"/>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>BucketToBufferGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>SimpleReconGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>ImageArraySplitGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>ExtractGadget</classname>
        </gadget>
    </stream>
</configuration>
