<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <stream>
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>AcquisitionAccumulateTriggerGadget</classname>
            <property name="trigger_dimension" value="repetition"/>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>BucketToBufferGadget</classname>
            <property name="split_slices" value="true"/>
        </gadget>

        <external>
            <execute name="gadgetron.examples.buffer_recon" type="matlab"/>
            <configuration/>
        </external>
    </stream>
</configuration>
