<?xml version="1.0" encoding="UTF-8"?>
<configuration>
    <version>2</version>

    <stream>
        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>NoiseAdjustGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>PCACoilGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>CoilReductionGadget</classname>
            <property name="coils_out" value="8"/>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>AsymmetricEchoAdjustROGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>RemoveROOversamplingGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_grappa</dll>
            <classname>SliceAccumulator</classname>
        </gadget>

        <parallel>
            <branch>
                <dll>gadgetron_grappa</dll>
                <classname>AcquisitionFanout</classname>
            </branch>

            <stream key="images">
                <gadget>
                    <dll>gadgetron_grappa</dll>
                    <classname>ImageAccumulator</classname>
                </gadget>
            </stream>

            <stream key="weights">
                <gadget>
                    <dll>gadgetron_grappa</dll>
                    <classname>cpuWeightsCalculator</classname>
                </gadget>
            </stream>

            <merge>
                <dll>gadgetron_grappa</dll>
                <classname>Unmixing</classname>
            </merge>
        </parallel>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>ExtractGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>AutoScaleGadget</classname>
        </gadget>

        <gadget>
            <dll>gadgetron_mricore</dll>
            <classname>FloatToUShortGadget</classname>
        </gadget>
    </stream>
</configuration>