<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <gadget>
      <name>NFFT</name>
      <dll>gadgetron_hyper</dll>
      <classname>NFFT2DGadget</classname>
    </gadget>

    <gadget>
      <name>Extract</name>
      <dll>gadgetron_mricore</dll>
      <classname>ExtractGadget</classname>
    </gadget>

    <gadget>
      <name>ImageFinish</name>
      <dll>gadgetron_mricore</dll>
      <classname>ImageFinishGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>
