<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
        xmlns="http://gadgetron.sf.net/gadgetron"
        xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

    <gadget>
        <name>RemoveROOversampling</name>
        <dll>gadgetron_mricore</dll>
        <classname>RemoveROOversamplingGadget</classname>
    </gadget>

    <gadget>
        <name>AccTrig</name>
        <dll>gadgetron_mricore</dll>
        <classname>AcquisitionAccumulateTriggerGadget</classname>
        <property>
            <name>trigger_dimension</name>
            <value>repetition</value>
        </property>
    </gadget>

    <gadget>
        <name>Buff</name>
        <dll>gadgetron_mricore</dll>
        <classname>BucketToBufferGadget</classname>
        <property>
          <name>split_slices</name>
          <value>true</value>
        </property>
    </gadget>

 <gadget>
      <name>PassthroughPython</name>
      <dll>gadgetron_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_path</name>                  <value>/home/myuser/scripts/python</value></property>
      <property><name>python_module</name>                <value>passthrough</value></property>
      <property><name>python_class</name>                <value>Passthrough</value></property>
    </gadget>

 <gadget>
      <name>AccReconPython</name>
      <dll>gadgetron_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_path</name>                  <value>/home/myuser/scripts/python</value></property>
      <property><name>python_module</name>                <value>bucket_recon</value></property>
      <property><name>python_class</name>                <value>BucketRecon</value></property>
    </gadget>

    <gadget>
      <name>CoilCombinePython</name>
      <dll>gadgetron_python</dll>
      <classname>PythonGadget</classname>
      <property><name>python_path</name>                  <value>/home/myuser/scripts/python</value></property>
      <property><name>python_module</name>                <value>rms_coil_combine</value></property>
      <property><name>python_class</name>                <value>RMSCoilCombine</value></property>
    </gadget>

    <gadget>
      <name>Extract</name>
      <dll>gadgetron_mricore</dll>
      <classname>ExtractGadget</classname>
    </gadget>

</gadgetronStreamConfiguration>