<?xml version="1.0" encoding="UTF-8"?>
<gadgetronStreamConfiguration xsi:schemaLocation="http://gadgetron.sf.net/gadgetron gadgetron.xsd"
			      xmlns="http://gadgetron.sf.net/gadgetron"
			      xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance">

  <gadget>
    <name>NoiseAdjust</name>
    <dll>gadgetron_mricore</dll>
    <classname>NoiseAdjustGadget_unoptimized</classname>
  </gadget>

  <gadget>
    <name>gpuSpiralSensePrepGadget</name>
    <dll>gadgetron_spiral</dll>
    <classname>gpuSpiralSensePrepGadget</classname>
    <property><name>deviceno</name><value>0</value></property>
    <property><name>use_multiframe_grouping</name><value>true</value></property>
  </gadget>

  <gadget>
    <name>gpuSbSenseGadget</name>
    <dll>gadgetron_gpuparallelmri</dll>
    <classname>gpuSbSenseGadget</classname>
    <property><name>deviceno</name>                <value>0</value></property>
    <property><name>setno</name>                   <value>0</value></property>
    <property><name>number_of_cg_iterations</name> <value>10</value></property>
    <property><name>number_of_sb_iterations</name> <value>10</value></property>
    <property><name>cg_limit</name>                <value>1e-6</value></property>
    <property><name>oversampling_factor</name>     <value>1.25</value></property>
    <property><name>kernel_width</name>            <value>5.5</value></property>
    <property><name>mu</name>                      <value>1.0</value></property>
    <property><name>lambda</name>                  <value>2.0</value></property>
    <property><name>alpha</name>                   <value>0.5</value></property>
  </gadget>

  <gadget>
    <name>gpuSbSenseGadget</name>
    <dll>gadgetron_gpuparallelmri</dll>
    <classname>gpuSbSenseGadget</classname>
    <property><name>deviceno</name>                <value>0</value></property>
    <property><name>setno</name>                   <value>1</value></property>
    <property><name>number_of_cg_iterations</name> <value>10</value></property>
    <property><name>number_of_sb_iterations</name> <value>10</value></property>
    <property><name>cg_limit</name>                <value>1e-6</value></property>
    <property><name>oversampling_factor</name>     <value>1.25</value></property>
    <property><name>kernel_width</name>            <value>5.5</value></property>
    <property><name>mu</name>                      <value>1.0</value></property>
    <property><name>lambda</name>                  <value>2.0</value></property>
    <property><name>alpha</name>                   <value>0.5</value></property>
  </gadget>

  <gadget>
    <name>PhaseSubtraction</name>
    <dll>gadgetron_mricore</dll>
    <classname>FlowPhaseSubtractionGadget</classname>
  </gadget>

  <gadget>
    <name>MaxwellCorrection</name>
    <dll>gadgetron_mricore</dll>
    <classname>MaxwellCorrectionGadget</classname>
  </gadget>

  <gadget>
    <name>Extract</name>
    <dll>gadgetron_mricore</dll>
    <classname>ExtractGadget</classname>
    <property><name>extract_mask</name><value>9</value></property>
  </gadget>

  <gadget>
    <name>AutoScaleGadget</name>
    <dll>gadgetron_mricore</dll>
    <classname>AutoScaleGadget</classname>
  </gadget>

  <gadget>
    <name>FloatToShort</name>
    <dll>gadgetron_mricore</dll>
    <classname>FloatToUShortGadget</classname>
  </gadget>

</gadgetronStreamConfiguration>
